MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Documents and Settings\ddaly\Desktop\instrument_drivers\awg710.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: Tektronix
InstrumentModel: AWG710
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property DataPoints
    Type: InstrumentCommand
    ConfigureCommand: DATA:POINts EMEMory,
    QueryCommand: DATA:POINts? EMEMory
    PermissibleType: Double bounded [Max="131072.0" Min="2.0"]
    DefaultValue: 1000
    ReadOnly: never
    Description: set(obj,'DataPoints',1000)

      This property sets the length of the EMEMory register.

  Property FunctionGenerator1EFile
    Type: InstrumentCommand
    ConfigureCommand: SOURce1:FUNCtion:EFILe
    QueryCommand: SOURce1:FUNCtion:EFILe?
    PermissibleType: String none
    DefaultValue: "/file.tfw"
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1EFile', frequency)

      This property sets the "EFile" for the AWG output.  This corresponds to a file path on the USB thumb drive.  The file must be of .tfw type.  In addition, the Shape of the AWG output must be set to "EFILe" before this command is executed.

  Property FunctionGenerator1Frequency
    Type: InstrumentCommand
    ConfigureCommand: SOURce1:FREQ
    QueryCommand: SOURce1:FREQ?
    PermissibleType: String none
    DefaultValue: 1kHz
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1Frequency', frequency) adjusts the frequency of the function waveform.  The input should be text with the appropriate "MHz", "kHz" etc. immediately after the number with no spaces.

  Property FunctionGenerator1Phase
    Type: InstrumentCommand
    ConfigureCommand: SOURce1:PHASe
    QueryCommand: SOURce1:PHASe?
    PermissibleType: Double bounded [Max="3.2" Min="-3.2"]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1Phase',volt_pkpk) sets a phase of the function generator.  The input should be a double in units of rads.

      i.e. Input 3.141592 for 180 degrees

  Property FunctionGenerator1Shape
    Type: InstrumentCommand
    ConfigureCommand: SOURce1:FUNCtion:SHAPe
    QueryCommand: SOURce1:FUNCtion:SHAPe?
    PermissibleType: String enum [SINusoid=SINusoid, SQUare=SQUare, RAMP=RAMP, PULSe=PULSe, DC=DC, PRNoise=PRNoise, SINC=SINC, GAUSsian=GAUSsian, LORentz=LORentz, ERISe=ERISe, USER1=USER1, USER2=USER2, USER3=USER3, USER4=USER4, EFILe=EFILe]
    DefaultValue: SINusoid
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1Shape', shape) sets a standard function waveform.  The inputs should be one of:

      SINusoid
      SQUare
      RAMP
      PULSe
      DC
      etc.

      At *RST, this value is set to SINusoid

  Property FunctionGenerator1VoltAmp
    Type: InstrumentCommand
    ConfigureCommand: SOURce1:VOLTage:AMPL
    QueryCommand: SOURce1:VOLTage:AMPL?
    PermissibleType: Double bounded [Max="1.0" Min="0.02"]
    DefaultValue: 0.1
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1VoltAmp',volt_pkpk) sets a peak-to-peak amplitude of the function generator.  The input should be a double in units of Volts.

  Property FunctionGenerator1VoltOffset
    Type: InstrumentCommand
    ConfigureCommand: :SOURce1:VOLTage:OFFset
    QueryCommand: :SOURce1:VOLTage:OFFset?
    PermissibleType: Double bounded [Max="5.0" Min="-5.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1VoltOffset', volt) sets the offset voltage of the function generator.  The input should be a double in units of Volts.

  Property FunctionGenerator2EFile
    Type: InstrumentCommand
    ConfigureCommand: SOURce2:FUNCtion:EFILe
    QueryCommand: SOURce2:FUNCtion:EFILe?
    PermissibleType: String none
    DefaultValue: "/file.tfw"
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1EFile', frequency)

      This property sets the "EFile" for the AWG output.  This corresponds to a file path on the USB thumb drive.  The file must be of .tfw type.  In addition, the Shape of the AWG output must be set to "EFILe" before this command is executed.

  Property FunctionGenerator2Frequency
    Type: InstrumentCommand
    ConfigureCommand: SOURce2:FREQ
    QueryCommand: SOURce2:FREQ?
    PermissibleType: String none
    DefaultValue: 1kHz
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1Frequency', frequency) adjusts the frequency of the function waveform.  The input should be text with the appropriate "MHz", "kHz" etc. immediately after the number with no spaces.

  Property FunctionGenerator2Phase
    Type: InstrumentCommand
    ConfigureCommand: SOURce2:PHASe
    QueryCommand: SOURce2:PHASe?
    PermissibleType: Double bounded [Max="3.2" Min="-3.2"]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator2Phase',volt_pkpk) sets a phase of the function generator.  The input should be a double in units of rads.

      i.e. Input 3.141592 for 180 degrees

  Property FunctionGenerator2Shape
    Type: InstrumentCommand
    ConfigureCommand: SOURce2:FUNCtion:SHAPe
    QueryCommand: SOURce2:FUNCtion:SHAPe?
    PermissibleType: String enum [SINusoid=SINusoid, SQUare=SQUare, RAMP=RAMP, PULSe=PULSe, DC=DC, PRNoise=PRNoise, SINC=SINC, GAUSsian=GAUSsian, LORentz=LORentz, ERISe=ERISe, USER1=USER1, USER2=USER2, USER3=USER3, USER4=USER4, EFILe=EFILe]
    DefaultValue: SINusoid
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator2Shape', shape) sets a standard function waveform.  The inputs should be one of:

      SINusoid
      SQUare
      RAMP
      PULSe
      DC
      etc.

      At *RST, this value is set to SINusoid

  Property FunctionGenerator2VoltAmp
    Type: InstrumentCommand
    ConfigureCommand: SOURce2:VOLTage:AMPL
    QueryCommand: SOURce2:VOLTage:AMPL?
    PermissibleType: Double bounded [Max="1.0" Min="0.02"]
    DefaultValue: 0.1
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1VoltAmp',volt_pkpk) sets a peak-to-peak amplitude of the function generator.  The input should be a double in units of Volts.

  Property FunctionGenerator2VoltOffset1
    Type: InstrumentCommand
    ConfigureCommand: :SOURce2:VOLTage:OFFset
    QueryCommand: :SOURce2:VOLTage:OFFset?
    PermissibleType: Double bounded [Max="5.0" Min="-5.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'FunctionGenerator1VoltOffset', volt) sets the offset voltage of the function generator.  The input should be a double in units of Volts.

  Property FunctionGeneratorState
    Type: InstrumentCommand
    ConfigureCommand: :AWGControl:FG:STATe
    QueryCommand: :AWGControl:FG:STATe?
    PermissibleType: Double enum [1.0, 0.0]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'FunctionGeneratorState', boolean) enables or disables the function generator mode.  This also causes the "RUN" button to be enabled but does not cause the outputs to be enabled.

      boolean should be 1 or 0.

  Property Output1State
    Type: InstrumentCommand
    ConfigureCommand: :OUTPut1:STATE
    QueryCommand: :OUTPut1:STATE?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'Output1State',boolean) enables or disables the output.  boolean should be a double of 1 or 0.

      Output2State() is a similar function that enables or disables the second output.

  Property Output2State
    Type: InstrumentCommand
    ConfigureCommand: :OUTPut2:STATE
    QueryCommand: :OUTPut2:STATE?
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never
    Description: set(obj, 'Output2State',boolean) enables or disables the second output.  boolean should be a double of 1 or 0.

      OutputState() is a similar function that enables or disables the first output.

  Property ReferenceOscillator
    Type: InstrumentCommand
    ConfigureCommand: :SOURce:ROSCillator:SOURce
    QueryCommand: :SOURce:ROSCillator:SOURce?
    PermissibleType: String enum [INT=INT, EXT=EXT]
    DefaultValue: INT
    ReadOnly: never
    Description: set(obj, 'ReferenceOscillator', string) configures
      the AWG for internal (INT) or external (EXT) 10 MHz reference control.

  Method AlignPhase
    Type: InstrumentCommand
    Line Command="SOURce:PHASe:INITiate" Output="false"
    Description: invoke(obj,'AlignPhase')

      This function aligns the phases of the two outputs.  This is very important to do after changing the frequency!

  Method SetData
    Type: InstrumentCommand
    Line Command="DATA:VALue <string>" Output="false"
    Input: string
    Description: invoke(obj,'SetData',string)

  Method SetDataLine
    Type: InstrumentCommand
    Line Command="DATA:LINE <string>" Output="false"
    Input: string
    Description: invoke(obj,'SetDataLine',string)
