MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\sandbox\matlab\toolbox\instrument\instrument\drivers\tektronix_tds2014.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: Tektronix
InstrumentModel: 3054B
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST; HEADER OFF; VERBOSE ON
Selftest: *TST?
Error: *ESR?; ALLEv?

CreateInitCode
  Code:
    function init(obj)
    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
    % Extract the interface object.
    interface = get(obj, 'Interface');

    fclose(interface);

    % Configure the buffer size to allow for waveform transfer.
    set(interface, 'InputBufferSize', 25000);
    set(interface, 'OutputBufferSize', 25000);

ConnectInitCode
  Code:
    function init(obj)
    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
    %get the interface
    interface = get(obj, 'interface');

    %If HEADER is not OFF or VERBOSE is not ON then responses retrieved from
    % the device will not match what is expected, and the driver will not
    % function properly.
    fprintf(interface, 'HEADER OFF');
    fprintf(interface, 'VERBOSE ON');

    %Clear the Standard Event Status Register (SESR) to remove possible Power
    % on event, which would otherwise be returned by getError.
    query(interface, '*ESR?');

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Language
    Type: InstrumentCommand
    ConfigureCommand: LANGuage
    QueryCommand: LANGuage?
    PermissibleType: String enum [english=ENGL, french=FREN, german=GERM, italian=ITAL, portuguese=PORTU, spanish=SPAN, japanese=JAPA, korean=KORE, traditionalChinese=TRAD, simplifiedChinese=SIMP]
    DefaultValue: english
    ReadOnly: never
    Description: Sets or queries the language that the oscilloscope uses to display information on the screen.

  Property Math
    Type: InstrumentCommand
    ConfigureCommand: MATH:DEFINE
    QueryCommand: MATH:DEFINE?
    PermissibleType: String enum [ch1 - ch2="CH1 - CH2", ch2 - ch1="CH2 - CH1", ch1 + ch2="CH1 + CH2", ch3 - ch4="CH3 - CH4", ch4 - ch3="CH4 - CH3", ch3 + ch4="CH3 + CH4"]
    DefaultValue: ch1 - ch2
    ReadOnly: never
    Description: The query form of this command return the definition for the math waveform.

  Property ResponseHeaderState
    Type: InstrumentCommand
    QueryCommand: HEADer?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Response Header Enable State that causes the oscilloscope to either include or omit headers on query responses.

      NOTE: Although the property is not truly read only for the instrument, the value must be 'off' for the driver to operate correctly.  As a result, it is set as read-only for the driver.

  Property VerboseEnabled
    Type: InstrumentCommand
    ConfigureCommand: VERBose
    QueryCommand: VERBose?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Verbose state that controls the length of keywords on query responses.

      Although this property is configurable on the instrument, the driver requires that it always be on so that we receive predictable responses from the instrument.

  Method autoset
    Type: InstrumentCommand
    Line Command="AUTOSet EXECUTE" Output="false"
    Description: AUTOSET Automatic parameter adjustment.

      INVOKE(OBJ, 'autoset') causes the oscilloscope to adjust its vertical, horizontal, and trigger controls to display a more stable waveform.

  Method factoryreset
    Type: InstrumentCommand
    Line Command="FACtory" Output="false"
    Line Command="HEADER OFF" Output="false"
    Description: FACTORYRESET  Resets the oscilloscope to its factory default settings.

      INVOKE(OBJ, 'factoryreset')  resets the oscilloscope to its factory settings.

Group acquisition
  Description: The aquisition group define properties and function related to how the waveform is acquired and the timebase.
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property AcquisitionCount
    Type: InstrumentCommand
    QueryCommand: ACQuire:NUMACq?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Indicate the number of acquisitions that have taken place since starting oscilloscope acquisition.

  Property Control
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:STOPAfter
    QueryCommand: ACQuire:STOPAfter?
    PermissibleType: String enum [run-stop=RUNSTOP, single=SEQUENCE]
    DefaultValue: run-stop
    ReadOnly: never
    Description: Tells the oscilloscope when to stop taking acquisitions for edge trigger type.  If the property value is 'run-stop' then acquisition is controlled by the run/stop button on the oscilloscope.  If the value 'single' then a single acquisition is performed (note that 'single acquisition may include multiple triggers and wavforms depending on other property settings such as NumberOfAverages.

  Property Delay
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:MAIn:POSition
    QueryCommand: HORizontal:MAIn:POSition?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the main time base horizontal position.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:MODe
    QueryCommand: ACQuire:MODe?
    PermissibleType: String enum [sample=SAMPLE, peakDetect=PEAKDETECT, average=AVERAGE]
    DefaultValue: Sample
    ReadOnly: never
    Description: Sets or query the oscilloscope acquisition mode.

  Property NumberOfAverages
    Type: InstrumentCommand
    ConfigureCommand: ACQuire:NUMAVg
    QueryCommand: ACQuire:NUMAVg?
    PermissibleType: Double enum [4.0, 16.0, 64.0, 128.0, 2.0, 8.0, 32.0, 256.0]
    DefaultValue: 4.0
    ReadOnly: never
    Description: Sets the number of oscilloscope waveform acquisitions that make up an averaged waveform.

  Property State
    Type: InstrumentCommand
    ConfigureCommand: ACQ:STATE
    QueryCommand: ACQ:STATE?
    PermissibleType: String enum [stop=0, run=1]
    DefaultValue: stop
    ReadOnly: never
    Description: Starts or stops oscilloscope acquisitions.

  Property Timebase
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:MAIn:SCALe
    QueryCommand: HORizontal:MAIn:SCALe?
    PermissibleType: Double bounded [Max="10.0" Min="1.0E-9"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the time per divison for the main time base.

  Property View
    Type: InstrumentCommand
    ConfigureCommand: HORizontal:VIEw
    QueryCommand: HORizontal:VIEw?
    PermissibleType: String enum [main=MAIN, window=WINdow, zone=ZONE]
    DefaultValue: Main
    ReadOnly: never
    Description: Specifies wether the horizontal display uses the main, window zone, or window view.

Group calibration
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property DiagnosticTestStatus
    Type: InstrumentCommand
    QueryCommand: DIAG:RESult:FLAg?
    PermissibleType: String enum [fail=FAIL, pass=PASS]
    DefaultValue: fail
    ReadOnly: always
    Description: Returns the status of the last diagnostic test sequence execution.

  Property Status
    Type: InstrumentCommand
    QueryCommand: CALibrate:STATus?
    PermissibleType: String enum [pass=PASS, fail=FAIL]
    DefaultValue: pass
    ReadOnly: always
    Description: Returns the status of the last calibration operation performed( either self-or factory -calibration) since power up.

  Property TestSequenceResult
    Type: InstrumentCommand
    QueryCommand: DIAg:RESult:LOG?
    PermissibleType: String none
    ReadOnly: always
    Description: Returns the internal results log from the last diagnostic test sequence excecution. The list contains all modules and module intefaces that were tested along with the pass/fail status of each.

  Method abort
    Type: InstrumentCommand
    Line Command="CALibrate:ABORT" Output="false"
    Description: ABORT stops the in-process factory calibration procedure.

      INVOKE(obj,'abort') to abort the factory calibration process.

      OBJ is a group object.

  Method initialize
    Type: InstrumentCommand
    Line Command="CALibrate:FACTory" Output="false"
    Description: INITIALIZE starts the oscilloscope's internal factory calibration operation.

      INVOKE(obj, 'initialize') to start the factory calibration.

  Method proceed
    Type: InstrumentCommand
    Line Command="CALibrate:CONTINUE" Output="false"
    Description: PROCEED Performs the next step in the factory calibration.

      INVOKE(obj, 'proceed') for the next step in the factory calibration.

  Method selfcalibrate
    Type: InstrumentCommand
    Line Command="CALibrate:INTERNAL" Output="false"
    Description: SELFCALIBRATE Performs an internal self-calibration.

      INVOKE(obj, 'selfcalibrate') to self-calibrate the oscilloscope. This function does not return any status information.

Group channel
  Size: 4
  Mappings
    ChannelMap Command="CH4" Index="4"
    ChannelMap Command="CH3" Index="3"
    ChannelMap Command="CH2" Index="2"
    ChannelMap Command="CH1" Index="1"

  Property BandwidthLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the devide object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device, 'Interface');

      %get the <ID>, e.g.: CH1, CH2...
      id = get(obj,'HwName');

      %ask for the property value from the device
      %send the commands as a string (%s)
      %return the value as a float (%f)
      bandwidthLimit = query(interface,[ id, ':bandwidth?'],'%s','%f');

      %value is returned in Hertz, convert to MegaHertz
      propertyValue = bandwidthLimit/1000000;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the devide object
      device = get(obj,'Parent');

      %get the interface
      interface = get(device, 'Interface');

      %get the <ID>, e.g.: CH1, CH2...
      id = get(obj,'HwName');

      %find out if propertyValue was passed as a char ('full'), then we can send
      %the command directly to the device
      if ischar(propertyValue)
      	fprintf(interface, [id, ':bandwidth FULL']);

      %otherwise, we have to convert from MHz to Hz
      else
      	bandwidthLimit = propertyValue*1000000;
      	fprintf(interface, [id, ':bandwidth ',num2str(bandwidthLimit)]);

      end%if ischar(propertyValue)
    PermissibleType: Double enum [20.0, 150.0, 500.0]
    PermissibleType: String enum [full=500000000]
    DefaultValue: 20.0
    ReadOnly: never
    Description: Sets or queries the bandwidth setting of the specified oscilloscope channel.

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: <ID>:COUP
    QueryCommand: <ID>:COUP?
    PermissibleType: String enum [ac=AC, dc=DC, ground=GND]
    DefaultValue: ac
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property Position
    Type: InstrumentCommand
    ConfigureCommand: <ID>:POSition
    QueryCommand: <ID>:POSition?
    PermissibleType: Double bounded [Max="5.0" Min="-5.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the vertical position of the specified oscilloscope channel.  Units are in divisions.

  Property Probe
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PRObe
    QueryCommand: <ID>:PRObe?
    PermissibleType: Double enum [1.0, 10.0, 100.0, 1000.0]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the attenuation factor of the specified channel.

  Property Scale
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SCAle
    QueryCommand: <ID>:SCAle?
    PermissibleType: Double bounded DependentProperty=Probe DependentPropertyValue=1.0 [Max="10.0" Min="0.0010"]
    PermissibleType: Double bounded DependentProperty=Probe DependentPropertyValue=10.0 [Max="100.0" Min="0.01"]
    PermissibleType: Double bounded DependentProperty=Probe DependentPropertyValue=100.0 [Max="1000.0" Min="0.1"]
    PermissibleType: Double bounded DependentProperty=Probe DependentPropertyValue=1000.0 [Max="10000.0" Min="1.0"]
    DefaultValue: 0.0020
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property State
    Type: InstrumentCommand
    ConfigureCommand: Select:<ID>
    QueryCommand: Select:<ID>?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable the display of the waveform on the scope.

Group cursor
  Size: 1
  Mappings ChannelMap Command="Cursor1" Index="1"

  Property CursorType
    Type: InstrumentCommand
    ConfigureCommand: CURSor:FUNCtion
    QueryCommand: CURSor:FUNCtion?
    PermissibleType: String enum [horizontalBars=HBArs, verticalBars=VBArs, none=OFF]
    DefaultValue: none
    ReadOnly: never
    Description: Selects the cursor type.

  Property HorizontalBarDelta
    Type: InstrumentCommand
    QueryCommand: CURSor:HBArs:DELTa?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returs the difference (in verticalunits) between the two horizontal bar cursors in the oscilloscope display.

  Property HorizontalBarPosition1
    Type: InstrumentCommand
    ConfigureCommand: CURSor:HBArs:POSITION1
    QueryCommand: CURSor:HBArs:POSITION1?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first horizontal bar cursor position.

  Property HorizontalBarPosition2
    Type: InstrumentCommand
    ConfigureCommand: CURSor:HBArs:POSITION2
    QueryCommand: CURSor:HBArs:POSITION2?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second horizontal bar cursor position.

  Property HorizontalBarUnits
    Type: InstrumentCommand
    QueryCommand: CURSor:HBARS:UNIts?
    PermissibleType: String enum [volts=VOL, divisions=DIV, decibels=DECIBELS, unknown=UNKNOWN]
    DefaultValue: volts
    ReadOnly: always
    Description: Returns the vertical scale units for the selected cursor source waveform.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: CURSor:SELect:SOUrce
    QueryCommand: CURSor:SELect:SOUrce?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, referenceA=REFA, referenceB=REFB, referenceC=REFC, referenceD=REFD, math=MATH]
    DefaultValue: Channel1
    ReadOnly: never
    Description: Sets or queries the waveform that is the source of the vertical and horizontal scale factors used in determining cursor values.

  Property VerticalBarDelta
    Type: InstrumentCommand
    QueryCommand: CURSor:VBArs:DELTa?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the time or frequency difference between the two vertical bar cursors.

  Property VerticalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %Tell the instrument you want it to tell you the value
      fprintf(interface, 'CURSor:VBArs:POSITION1?');

      %retrieve the value from the instrument, and convert it to a double
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %find out what mode its in
      fprintf(interface,'HORizontal:VIEw?');
      view = deblank(fscanf(interface));

      if strncmpi(view,'WINdow',length(view)) ||...
      		strncmpi(view,'ZONE',length(view))
      	mode = 'DELay';
      elseif strncmpi(view,'MAIN',length(view))
      	mode = 'MAIn';
      else
      	error(['Unrecognized view mode. Expected MAIN, WINdow, or ZONE.',...
      		' Received ',view]);
      end%if/elseif/else

      %request the TimeBase (or WindowTimeBase) from the instrument
      fprintf(interface,['HORizontal:',mode,':SCALe?']);
      timebase = fscanf(interface,'%f');

      %request the Delay (or WindowDelay) from the instrument
      fprintf(interface,['HORizontal:',mode,':POSition?']);
      delay = fscanf(interface,'%f');

      %reticule has 10 division, timebase is seconds/division
      % range is the seconds across the entire display
      range = 10*timebase;

      %horizontal cursor positions can range from one side of the display to the
      % other, and are measured in seconds
      minimum = -1*range/2-delay;
      maximum = range/2-delay;

      if propertyValue > maximum || propertyValue < minimum

      	error(['Invalid value for VerticalBarPosition1. ',...
      		'Valid values for current Scale and Position settings: ',...
      		'a value between ',num2str(minimum),' and ',num2str(maximum)]);

      end%if propertyValue > maximum || propertyValue < minimum

      %set the property to the specified value
      fprintf(interface, ['CURSor:VBArs:POSITION1 ', num2str(propertyValue)]);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first vertical bar cursor position.

  Property VerticalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %Tell the instrument you want it to tell you the value
      fprintf(interface, 'CURSor:VBArs:POSITION2?');

      %retrieve the value from the instrument, and convert it to a double
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %find out what mode its in
      fprintf(interface,'HORizontal:VIEw?');
      view = deblank(fscanf(interface));

      if strncmpi(view,'WINdow',length(view)) ||...
      		strncmpi(view,'ZONE',length(view))
      	mode = 'DELay';
      elseif strncmpi(view,'MAIN',length(view))
      	mode = 'MAIn';
      else
      	error(['Unrecognized view mode. Expected MAIN, WINdow, or ZONE.',...
      		' Received ',view]);
      end%if/elseif/else

      %request the TimeBase (or WindowTimeBase) from the instrument
      fprintf(interface,['HORizontal:',mode,':SCALe?']);
      timebase = fscanf(interface,'%f');

      %request the Delay (or WindowDelay) from the instrument
      fprintf(interface,['HORizontal:',mode,':POSition?']);
      delay = fscanf(interface,'%f');

      %reticule has 10 division, timebase is seconds/division
      % range is the seconds across the entire display
      range = 10*timebase;

      %horizontal cursor positions can range from one side of the display to the
      % other, and are measured in seconds
      minimum = -1*range/2-delay;
      maximum = range/2-delay;

      if propertyValue > maximum || propertyValue < minimum

      	error(['Invalid value for VerticalBarPosition1. ',...
      		'Valid values for current Scale and Position settings: ',...
      		'a value between ',num2str(minimum),' and ',num2str(maximum)]);

      end%if propertyValue > maximum || propertyValue < minimum

      %set the property to the specified value
      fprintf(interface, ['CURSor:VBArs:POSITION2 ', num2str(propertyValue)]);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second vertical bar cursor position.

  Property VerticalBarUnits
    Type: InstrumentCommand
    ConfigureCommand: CURSor:VBArs:UNIts
    QueryCommand: CURSor:VBArs:UNIts?
    PermissibleType: String enum [seconds=SECO, hertz=HER]
    DefaultValue: seconds
    ReadOnly: never
    Description: Sets or queries the units for the vertical bar cursors.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Contrast
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:CONTRast
    QueryCommand: DISPlay:CONTRast?
    PermissibleType: Double bounded [Max="100.0" Min="1.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Set or query the contast of the LCD display.

  Property Format
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:FORMat
    QueryCommand: DISPlay:FORMat?
    PermissibleType: String enum [xy=XY, yt=YT]
    DefaultValue: XY
    ReadOnly: never
    Description: Sets or queries the oscilloscope display format.

  Property Persistence
    Type: InstrumentCommand
    ConfigureCommand: DIS:PERS
    QueryCommand: DIS:PERS?
    PermissibleType: Double enum [1.0, 2.0, 5.0, 0.0, 99.0]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the length of time that data points are displayed.

  Property Style
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:STYle
    QueryCommand: DISPlay:STYle?
    PermissibleType: String enum [dots=DOTs, vectors=VECtors]
    DefaultValue: Dots
    ReadOnly: never
    Description: Selects how to display the waveform data.

Group measurement
  Size: 6
  Mappings
    ChannelMap Command="MEAS5" Index="6"
    ChannelMap Command="IMMED" Index="5"
    ChannelMap Command="MEAS4" Index="4"
    ChannelMap Command="MEAS3" Index="3"
    ChannelMap Command="MEAS2" Index="2"
    ChannelMap Command="MEAS1" Index="1"

  Property MeasurementType
    Type: InstrumentCommand
    ConfigureCommand: MEASUrement:<ID>:TYPe
    QueryCommand: MEASUrement:<ID>:TYPe?
    PermissibleType: String enum [frequency=FREQ, mean=MEAN, period=PERI, peak2peak=PK2PK, crms=CRM, none=NONE, minimum=MINI, maximum=MAXI, positivewidth=PWIDTH, negativewidth=NWIDTH, amplitude=AMP, burst=BUR, fall=FALL, high=HIGH, low=LOW, negativeduty=NDU, negativeovershoot=NOV, positiveduty=PDU, rise=RISE]
    DefaultValue: Frequency
    ReadOnly: never
    Description: Sets or query the measurement type.  By default this driver supports the standard measurement types of the oscilloscope, and does not include any measurements supported only by expansion modules.  To add additional measurement types supported by your model, edit the driver using midedit.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: MEASU:<ID>:SOUrce
    QueryCommand: MEASU:<ID>:SOUrce?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

  Property Units
    Type: InstrumentCommand
    QueryCommand: MEASU:<ID>:UNIts?
    PermissibleType: String enum [hertz="Hz", volts="V", seconds="s", n/a=""]
    DefaultValue: hertz
    ReadOnly: always
    Description: Returns the units for the oscilloscope measurement specified the mesurement type.

  Property Value
    Type: InstrumentCommand
    QueryCommand: MEASU:<ID>:VALue?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the value of a measurement.  If the object is the immediate measurement object (the HwName property is 'IMMED') this property is always valid.  For the standard periodic measurements, it is only a valid valid if the MesesurementType is not 'none'.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method disablelocalcontrols
    Type: InstrumentCommand
    Line Command="LOCK ALL" Output="false"
    Description: DISABLELOCALCONTROLS Disable all front-panel buttons and knobs.

      INVOKE(OBJ, 'disablelocalcontrols') 'unlocks' all front-panel keys and knobs.

  Method enablelocalcontrols
    Type: InstrumentCommand
    Line Command="LOCK NONe" Output="false"
    Description: ENABLELOCALCONTROLS Enable all front-panel buttons and knobs.

      INVOKE(OBJ, 'enablelocalcontrols') 'locks' all front-panel keys and knobs.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 10, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >10 || location <1
                  error('LOCATION must be between 1 and 10 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])
    Description: LOADSTATE  Recall a previously stored state.

      INVOKE(OBJ, loadstate, location) restores the state of the oscilloscope from a copy of settings stores in memory.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 10, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >10 || location <1
                  error('LOCATION must be between 1 and 10 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])
    Description: SAVESTATE  Save the current state of the oscilloscope.

      INVOKE(OBJ,'savestate',location) stores an instrument configuration at the specified memory location, LOCATION.

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property Coupling
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Edge:Coupling
    QueryCommand: Trigger:Main:Edge:Coupling?
    PermissibleType: String enum [ac=ac, dc=dc, highFreqRejection=hfrej, lowFreqRejection=lfrej, noiseRejection=noiserej]
    DefaultValue: dc
    ReadOnly: never
    Description: Sets or queries the type of coupling for the main edge trigger.  This is equivalent to setting Coupling in the Trigger menu.

  Property Holdoff
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Holdoff:Value
    QueryCommand: Trigger:Main:Holdoff?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets the oscilloscope's main holdoff value.

  Property Level
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      %tell the device you want the value
      fprintf(interface,'TRIGGer:MAIN:LEVel?');

      %get the value
      propertyValue = fscanf(interface,'%f');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get Device Object
      deviceObj = get(obj,'Parent');

      %get Interface
      interface = get(deviceObj,'Interface');

      %get the source
      fprintf(interface,'TRIGGer:MAIN:EDGE:SOURce?');
      source = deblank(fscanf(interface));

      acceptableSources = {'ch1','ch2','ch3','ch4','ext','ext5','line'};
      if isempty(strmatch(lower(source),acceptableSources))
      	error(['Unexpected value for source. Expect ch1, ch2, ch3, ch4, ext, ext5, or line. Recevied: ',...
      		source]);
      end%if isempty(strmatch(lower(source),acceptableSource))

      %if source is line, ext or ext5, don't check propertyValue
      if isempty(strmatch(lower(source),{'ch1','ch2','ch3','ch4'}));
      	fprintf(interface,['TRIGGer:MAIN:LEVel ',num2str(propertyValue)]);
      end%if ~isempty(strmatch(lower(source),{'ext','ext5'}));

      %get the scale
      fprintf(interface,[source,':SCAle?']);
      scale = fscanf(interface,'%f');

      %when source is zeroed, Trigger Level can go to plus or minus 8 times the scale or the source
      range = 16*scale;

      %get the source's position
      fprintf(interface,[source,':POSition?']);
      position = fscanf(interface,'%f');

      %position is in divs, we need it in volts, scale is volts/div
      position = position*scale;

      minimum = -1*range/2 - position;
      maximum = range/2 - position;

      if propertyValue > maximum || propertyValue < minimum
      	error(['Invalid value for Level. Valid values: a value from ',...
      		num2str(minimum),' to ',num2str(maximum),' (inclusive).']);
      end%if propertyValue > maximum || propertyValue < minimum

      %set the value
      fprintf(interface,['TRIGGer:MAIN:LEVel ',num2str(propertyValue)]);
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the oscilloscope main trigger level.  This command is equivalent to adjusting the front-panel TRIGGER LEVEL knob.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Mode
    QueryCommand: Trigger:Main:Mode?
    PermissibleType: String enum [auto=auto, normal=normal]
    DefaultValue: normal
    ReadOnly: never
    Description: Sets the trigger mode for the edge trigger type.

  Property Slope
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Edge:Slope
    QueryCommand: Trigger:Main:Edge:Slope?
    PermissibleType: String enum [falling=fall, rising=rise]
    DefaultValue: rising
    ReadOnly: never
    Description: Selects a rising or falling slope for the main edge trigger.  This is equivalent to setting Slope in the Trigger menu.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Edge:Source
    QueryCommand: Trigger:Main:Edge:Source?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, external=EXT, external5=EXT5, acline=LINE]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets of the source for the main edge trigger.  This is equivalent to setting Source in the Trigger menu.

  Property State
    Type: InstrumentCommand
    QueryCommand: TRIGger:STATE?
    PermissibleType: String enum [armed=Armed, ready=Ready, trigger=Trigger, auto=Auto, save=Save, scan=Scan]
    DefaultValue: Armed
    ReadOnly: always
    Description: Return the current state of the trigger system.

  Property TriggerType
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Type
    QueryCommand: Trigger:Main:Type?
    PermissibleType: String enum [edge=EDGE, video=VID, pulse=PUL]
    DefaultValue: edge
    ReadOnly: never
    Description: Sets the type of oscilloscope trigger.  This is equivalent to setting Type in the Trigger menu.

  Property VideoPolarity
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Video:Polarity
    QueryCommand: Trigger:Main:Video:Polarity?
    PermissibleType: String enum [normal=NORMAL, inverted=INVERT]
    DefaultValue: normal
    ReadOnly: never
    Description: Sets the video trigger polarity.  This is equivalent to selecting Polarity in the Trigger/Video menu.

  Property VideoSource
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Video:Source
    QueryCommand: Trigger:Main:Video:Source?
    PermissibleType: String enum [channel1=CH1, channel2=CH2, channel3=CH3, channel4=CH4, external=EXT, external5=EXT5]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets the source for the main video trigger.  This is equivalent to selecting Source in the Video trigger menu.

  Property VideoSync
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Main:Video:Sync
    QueryCommand: Trigger:Main:Video:Sync?
    PermissibleType: String enum [field=field, line=line]
    DefaultValue: field
    ReadOnly: never
    Description: Sets the source for the video trigger sync.  This is equivalent to selecting Sync in the Trigger/Video menu.

  Method trigger
    Type: InstrumentCommand
    Line Command="*TRG" Output="false"
    Description: TRIGGER Trigger the instrument.

      INVOKE(OBJ,'TRIGGER') performs a Group Execute trigger.

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property ByteOrder
    Type: InstrumentCommand
    ConfigureCommand: WFMPre:BYT_Or
    QueryCommand: WFMPre:BYT_Or?
    PermissibleType: String enum [bigEndian=MSB, littleEndian=LSB]
    DefaultValue: littleEndian
    ReadOnly: never
    Description: Sets or queries which byte of binary waveform data is transmitted first during a waveform transfer.

  Property EndingPoint
    Type: InstrumentCommand
    ConfigureCommand: DATa:STOP
    QueryCommand: DATa:STOP?
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the ending point for waveformm data transfers.

  Property FirstPoint
    Type: InstrumentCommand
    ConfigureCommand: DATa:STARt
    QueryCommand: DATa:STARt?
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the starting point for waveformm data transfers.

  Property MaxNumberPoint
    Type: InstrumentCommand
    QueryCommand: HORizontal:RECordlength?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: The maximum number of acqusition data points.

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');
      propertyValue = '';

      % Set data width
      fprintf(interface,'DATA:WIDTH?')
      width = fscanf(interface);

      % Remove the newline character at the end of the string
      % The same is done for encoding
      width(length(width))= '';
      width  = str2num(width);

      % Check the data format and define propertyValue to the appropriate value
      fprintf(interface,'DATA:ENCdg?')
      encoding  = fscanf(interface);
      encoding(length(encoding)) = '';

      % define propertyValue with the right value
      if any(strcmpi(encoding,{'RIBinary','SRIbinary'}))
          propertyValue = ['int' num2str(8*width)];
      elseif any(strcmpi(encoding,{'RPBinary','SRPbinary'}))
           propertyValue = ['uint' num2str(8*width)];
      else propertyValue = 'ascii';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Get the byte order
      fprintf(interface,'WFMPre:BYT_Or?')

      % Get the order and remove newline character in string
      order = fscanf(interface);
      order(length(order)) = '';

      % Only an S differenciates the two commands(RIBinary and SRIBinary)
      % for signed integers. The S will be added to the command if the byte
      % order is LSB
      byteOrder ='';
      if strcmpi(order,'LSB') == 1
          byteOrder = 'S';
      end

      % Set the width
      if any(strcmpi(propertyValue,{'int8','uint8'}))
          fprintf(interface,['DATA:WIDTH 1'])
      elseif any(strcmpi(propertyValue,{'int16','uint16'}))
          fprintf(interface,['DATA:WIDTH 2'])
      else
          fprintf(interface,['DATA:WIDTH 1']);
         % error('Invalid format. Valid values are: int8,int16, uint8,uint16.')
      end

      % Specify format
      if strcmpi(propertyValue,'ascii')
          fprintf(interface,['DATA:ENCdg ASCIi'])
          %setting data:enc to ASCII reset Byte_Or to MSB, which is unneccssary.
          %this sets it back to what is was previously.
          fprintf(interface,['WFMPre:BYT_Or ',order]);
      elseif any(strcmpi(propertyValue,{'int8','int16'}))
          fprintf(interface,['DATA:ENCdg ' byteOrder 'RIBinary'])
      elseif any(strcmpi(propertyValue,{'uint8','uint16'}))
        fprintf(interface,['DATA:ENCdg ' byteOrder 'RPBinary'])
      end
    PermissibleType: String enum [ascii=ASCIi, int8=int8, int16=int16, uint8=uint8, uint16=uint16]
    DefaultValue: ascii
    ReadOnly: never

  Method readwaveform
    MCode:
      function [y, x, yunit, xunit] = readwaveform(obj, source, varargin)
      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
      if (nargout == 0)
          return;
      end

      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      validValues = {'channel1','channel2','channel3','channel4','referenceA','referenceB','referenceC','referenceD','math'};
      scopeValues = {'ch1', 'ch2', 'ch3', 'ch4', 'refa', 'refb', 'refc', 'refd', 'math'};

      idx = strmatch(lower(source), {'channel1','channel2','channel3','channel4','referencea','referenceb','math'}, 'exact');

      if (isempty(idx))
          error('Invalid SOURCE. CHANNEL must be one of: channel1, channel2, channel3, channel4, referenceA, referenceB, referenceC, referenceD, math');

      end

      trueSource = scopeValues{idx};

      if (nargin > 2)
          try
              scale = logical(varargin{1});
          catch
              error('SCALE must be a logical.');
          end
      end

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      set(obj, 'Precision', 'int16');
      set(obj, 'ByteOrder', 'littleEndian');

      try
          % Specify source
          fprintf(interface,['DATA:SOURCE ' trueSource]);

          % Issue the curve transfer command.
          fprintf(interface, 'CURVE?');

          raw = binblockread(interface, 'int16');

          % Tektronix scopes send and extra terminator after the binblock.
          fread(interface, 1);
      catch
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error(lasterr);
      end

      if (isempty(raw))
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('An error occurred while reading the waveform.');
      end

      if (scale == false)
          y = raw;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          ptcnt = str2num(query(interface, 'WFMPRE:NR_PT?'));
          x = 1:ptcnt;

          if (nargout > 2)
              xunit = query(interface, 'WFMPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      else
          yoffs = str2num(query(interface, 'WFMPRE:YOFF?'));
          ymult = str2num(query(interface, 'WFMPRE:YMULT?'));
          yzero = str2num(query(interface, 'WFMPRE:YZERO?'));
          y = ((raw - yoffs) .* ymult) + yzero;
          if (nargout < 2)
              set(obj, 'Precision', oldPrecision);
              set(obj, 'ByteOrder', oldByteOrder);
              return;
          end
          xzero = str2num(query(interface, 'WFMPRE:XZERO?'));
          xincr = str2num(query(interface, 'WFMPRE:XINCR?'));
          ptcnt = str2num(query(interface, 'WFMPRE:NR_PT?'));
          x = (((0:(ptcnt-1)) .* xincr) + xzero);

          if (nargout > 2)
              xunit = query(interface, 'WFMPRE:XUnit?');
              xunit(xunit == '"') = [];
              yunit = query(interface, 'WFMPRE:YUnit?');
              yunit(yunit == '"') = [];
          end
      end
      y = y';

      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel<x>, reference<y>, and
      math, where <x> is a number between 1 and the number of channels on the instrument and <y> is a letter between A and the number of reference channels on the instrument.

      [Y, T] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.

      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

  Method storewaveform
    MCode:
      function storewaveform(obj, channel, location)
      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
      idx = strmatch(lower(channel), {'channel1', 'channel2', 'channel3', 'channel4'}, 'exact');

      if (isempty(idx))
          error('CHANNEL must be ''channel1'', ''channel2'', ''channel3'', or ''channel4''');
      end

      idx = strmatch(lower(location), {'referencea', 'referenceb','referencec', 'referenced'}, 'exact');

      if (isempty(idx))
          error('LOCATION must be ''referencea'', ''referenceb'',''referencec'', or ''referenced''');
      end

      source = ['CH' channel(end)];
      dest = ['REF' location(end)];

      % Get interface
      interface = get(get(obj,'parent'),'interface');

      fprintf(interface, ['SAVe:WAVEform ' source ', ' dest]);
    Description: STOREWAVEFORM Save a waveform to oscilloscope memory.

      INVOKE(OBJ, 'storewaveform', CHANNEL, LOCATION) saves the waveform from CHANNEL to memory location, LOCATION.

  Method writewaveform
    MCode:
      function writewaveform(obj, datapoints, destination)

      % Validate destination
      if ~any(strcmpi(destination, {'referencea', 'referenceb','referencec','referenced'}))
          error('DESINATION must be ''referencea'', ''referenceb'',''referencec'', or ''referenced''');
      end

      % Check that the array contains only numeric data
      if ~isnumeric(datapoints) || length(size(datapoints)) > 2 || min(size(datapoints)) > 1
          error('DATA must be a 1 x n numeric array');
      end

      %find out the maximum number of points allowed
      fprintf(interface,'horizontal:recordlength?')
      maxpoints = fscanf(interface,'%f');

      if (numel(datapoints) > maxpoints)
          error(['DATA must be less than ',num2str(maxpoints),' points']);
      end

      oldPrecision = get(obj, 'Precision');
      set(obj, 'Precision', 'int16');

      %Get interface
      interface = get(get(obj,'parent'),'interface');

      try
          fprintf(inteface,['DATA:DESTination REF' destination(end)]);
          fprintf(interface,['CURVe ' data]);
          binblockwrite(interface, datapoints, 'int16');
      catch
      end

      set(obj, 'Precision', oldPrecision);
    Description: writeWAVEFORM Transfer waveforms in the oscilloscope.

      INVOKE(OBJ, 'writewaveform', POINTS) downloads the numeric data POINTS to the oscilloscope. 

      Warning: This operation can be very slow on TDS-200 series oscillscopes.
